
run("ROI Manager...");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/A ROI/A.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", 11);
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/B ROI/B.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/C ROI/C.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/D ROI/D.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/E ROI/E.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/F ROI/F.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Select", 8);
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/G ROI/G.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/H ROI/H.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/J ROI/J.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/K ROI/K.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/L ROI/L.zip");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 1);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 3);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
roiManager("Open", "E:/MTW/MSc/MSc Project/TO20/TO20 Test Images/ROI's/M ROI/M.zip");
roiManager("Select", 0);
roiManager("Select", 1);
run("Measure");
roiManager("Select", 2);
run("Measure");
roiManager("Select", 4);
roiManager("Select", 5);
run("Measure");
roiManager("Select", 6);
run("Measure");
roiManager("Select", 7);
run("Measure");
roiManager("Select", 8);
run("Measure");
roiManager("Select", 9);
run("Measure");
roiManager("Select", 10);
run("Measure");
roiManager("Select", 11);
run("Measure");
roiManager("Select", 0);
run("Measure");
roiManager("Select", 2);
roiManager("Select", 3);
run("Measure");
roiManager("Select", 4);
run("Measure");
roiManager("Select", newArray(0,1,2,3,4,5,6,7,8,9,10,11));
run("Select All");
roiManager("Deselect");
roiManager("Delete");
saveAs("Text", "E:/MTW/MSc/MSc Project/TO20/ROI Data/ROI data.csv");
